PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/ANT_v1.1_data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {u'session': u'1', u'participant': u''}
  expName = ANT_v1.11_Eng
  Units = deg
  Screen = 1
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Routines
  Routine Practice
    TextComponent practice_msg
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Practice Block

        If the respond is correct, you will see 'CORRECT' on the screen
        If the respond is wrong, you will see 'WRONG' on the screen

        If you don't make a respond, you will see 'MISS'.

        Press SPACE to start.
    KeyboardComponent start_practice
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent end_msg
      stopVal [duration (s)] = 20
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        This is the end of the experiment.

        Please call the experimenter.
    KeyboardComponent end_exp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Feedback
    CodeComponent anscheck
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        if len(theseKeys) <1:
            msg='MISS'
        elif resp.corr:#stored on last run routine
            msg='CORRECT'
        else:
            msg='WRONG'
    TextComponent msg_feedback
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      durationEstim = 1.5
      units = norm
      startVal [time (s)] = 0.1
      letterHeight = 0.05
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  Routine prepare
    CodeComponent fixation
      Begin Experiment:
        fix = u'\u3000\n\u3000\n\uff0b\n\u3000\n\u3000'
    CodeComponent Interval
      Begin Experiment:
        import random
        D1 = random.randrange(400,1600,1)/1000
        Flanker_start = D1+0.5
  Routine Instruction
    TextComponent Instr_msg
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        In the beginning of a trial, you will see a fixation cross in the middle of the screen.
        And then you will see one or two asterisk on, above or below the fixation. Sometimes there will be no asterisk.
        Next, you will see a series of arrows or short lines above or below the fixation.
        i.e.
          ─ ─ ← ─ ─
          ← ← ← ← ←
          → → ← → →
        Please press LEFT or RIGHT to indicate where is the arrow in the centre pointing to.

        In the practice blocks, the participant will be given. They would know if the respnd was correct or wrong.
        In the experiment blocks, no feedback will be given.

        Call the experimenter now if you have any question.
        Press SPACE to proceed to the practice block.
    KeyboardComponent end_instr
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Rest
    TextComponent rest_msg
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Take a break.

        Press SPACE to continue.
    KeyboardComponent end_rest
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code
      Begin Experiment:
        import random
      Begin Routine:
        D1 = float(random.randrange(400,1600))/1000
        Flanker_start = D1+0.5
      End Routine:
        if isinstance(resp.rt, float):
            rt = resp.rt
            end_time = 3.5-rt-D1
        else:
            rt = 1.7
            end_time = 1.8-D1
    StaticComponent ISI
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0.0
    TextComponent Init_fixation
      text = ＋
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0
      letterHeight = 0.55
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    TextComponent cue
      text [set every repeat] = $cue_
      stopVal [duration (s)] = 0.1
      pos [set every repeat] = $cue_pos
      startVal [time (s)] = D1
      letterHeight = 1
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    TextComponent cue2
      text [set every repeat] = $cue_
      stopVal [duration (s)] = 0.1
      pos [set every repeat] = $cue_pos2
      startVal [time (s)] = D1
      letterHeight = 1
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    TextComponent flanker
      stopVal [duration (s)] = 1.7
      pos [set every repeat] = $target_pos
      units = deg
      startVal [time (s)] = Flanker_start
      letterHeight = 0.55
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      text [set every repeat]:
        $target_
    KeyboardComponent resp
      correctAns = $target
      storeCorrect = True
      stopVal [duration (s)] = 1.7
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = Flanker_start
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  Routine Experiment
    TextComponent exp_msg
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        THis is the end of the practice block.
        The Experiment Blocks are about to start.

        Press SPACE to start the experiment blocks.
    KeyboardComponent start_exp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_trial
    TextComponent fix
      text = ＋
      stopVal [time (s)] = end_time
      startVal [time (s)] = 0.0
      letterHeight = 0.55
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  Routine test
    TextComponent text
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 1.6
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine testtext
    TextComponent text_correct
      text = 正確
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_wrong
      text = 錯誤
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_fail
      text = 無反應
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Instruction
  Routine Practice
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = conditions\ANT_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'neutural', u'cue_pos2': [0, 0], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, 0], u'target_pos': [0, 2], u'location': u'up'},
      {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'double', u'cue_pos2': [0, 1.06], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, -1.06], u'target_pos': [0, 2], u'location': u'up'},
      {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u's_up', u'cue_pos2': [0, 1.06], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, 1.06], u'target_pos': [0, 2], u'location': u'up'},
      {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'none', u'cue_pos2': [0, 0], u'target': u'left', u'cue_': u' ', u'cue_pos': [0, 0], u'target_pos': [0, 2], u'location': u'up'},
      {u'Flanker': u'cong', u'target_': u'\u2192 \u2192 \u2192 \u2192 \u2192', u'Cue': u'double', u'cue_pos2': [0, 1.06], u'target': u'right', u'cue_': u'*', u'cue_pos': [0, -1.06], u'target_pos': [0, -2], u'location': u'down'},
      {u'Flanker': u'cong', u'target_': u'\u2192 \u2192 \u2192 \u2192 \u2192', u'Cue': u's_down', u'cue_pos2': [0, -1.06], u'target': u'right', u'cue_': u'*', u'cue_pos': [0, -1.06], u'target_pos': [0, -2], u'location': u'down'}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
    Routine trial
    Routine end_trial
    Routine Feedback
  LoopTerminator practices
  Routine Experiment
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions\ANT_exp.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'double', u'cue_pos2': [0, 1.06], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, -1.06], u'target_pos': [0, -2], u'location': u'down'},
        {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'double', u'cue_pos2': [0, 1.06], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, -1.06], u'target_pos': [0, -2], u'location': u'down'},
        {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'neutural', u'cue_pos2': [0, 0], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, 0], u'target_pos': [0, -2], u'location': u'down'},
        {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'neutural', u'cue_pos2': [0, 0], u'target': u'left', u'cue_': u'*', u'cue_pos': [0, 0], u'target_pos': [0, -2], u'location': u'down'},
        {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'none', u'cue_pos2': [0, 0], u'target': u'left', u'cue_': u' ', u'cue_pos': [0, 0], u'target_pos': [0, -2], u'location': u'down'},
        {u'Flanker': u'cong', u'target_': u'\u2190 \u2190 \u2190 \u2190 \u2190', u'Cue': u'none', u'cue_pos2': [0, 0], u'target': u'left', u'cue_': u' ', u'cue_pos': [0, 0], u'target_pos': [0, -2], u'location': u'down'}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
      Routine trial
      Routine end_trial
    LoopTerminator trials
    Routine Rest
  LoopTerminator block
  Routine End
