PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'taskswitching_data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u'99'}
  expName = taskswitching.1.820
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    TextComponent end_msg
      text = This is the end of the experiment. Please call the experimenter. 
      stopVal [duration (s)] = 20
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent exit_exp
      stopVal [duration (s)] = 20
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    TextComponent incorrect
      text [set every repeat] = $fbmsg
      stopVal [duration (s)] = $error_disp
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent error
      Begin Experiment:
        fbmsg = 'WRONG'
      Begin Routine:
        if resp.corr==1:
            error_disp = 0
        else:
            error_disp = 0.5
    PolygonComponent frame_fb
      stopVal [duration (s)] = $error_disp
      units = cm
      startVal [time (s)] = 0.0
      size = [8, 8]
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  Routine Instruction
    TextComponent instr
      wrapWidth = 0.8
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Task Switching Task

        In this task, you will first see a cue indicating the relevant dimension.
        The possible dimensions are: orientation, motion and size.
        Next, you will see four rectangles arranged into a 2x2 matrix display on the screen.
        Please identify the rectangle that differs from the others regrading the given cue.
        Responses are made on keys that have the same spatial position on the number pad as the rectangles have on the screen.

        i.e.
        4 5
        1 2

        After an incorrect response, an error sign will appear.

        There will be one practice block and two experimental blocks.

        Press SPACE to start the practice.
    KeyboardComponent endInstr
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent CSI0
      Begin Experiment:
        #cue-stimulus interval(CSI)
        #get digits in the subjet number
        subjno =expInfo['participant']
        subjno = int(''.join(i for i in subjno if i.isdigit()))

        ##debug
        #print a, subjno, subjno_

        if subjno%2==0:
            CSI = [0.1,0.9]
        else:
            CSI = [0.9,0.1]

        maxrt = 2.5

        #select list
        seqlist = ['conditions\exp.seq1.xlsx','conditions\exp.seq2.xlsx','conditions\exp.seq3.xlsx','conditions\exp.seq4.xlsx','conditions\exp.seq5.xlsx','conditions\exp.seq6.xlsx']
        shuffle(seqlist)
        list1 = seqlist[0]
        list2 = seqlist[1]
      Begin Routine:
        dis_start=0.5
        dis_duration = maxrt+ dis_start
      End Routine:
        #set next Ntrial
        Ntrials = 20
  Routine Instr_Practice
    TextComponent start_practice
      text = Practice
      stopVal [duration (s)] = 3
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine rest
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take a break!

        Press SPACE to start the next block.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent CSI2
      Begin Routine:
        dis_start=CSI[1]
        dis_duration = maxrt+ dis_start
        #savelist2
        thisExp.addData('list',list2)
      End Routine:
        #set next Ntrial
        Ntrials = 20
  Routine Instr_exp
    TextComponent start_exp
      text = The Real Thing
      stopVal [duration (s)] = 3
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine trial
    CodeComponent display
      Begin Routine:
        #reset

        order = [0,1,2,3]
        stim_loc = [[-2,-2],[2,-2],[2,2],[-2,2]]
        key = ['num_1','num_2','num_5','num_4']
        mot_dev = [0,1]
        #0->horizontal, 1->vertical
        #col_dev = ['deeppink','purple']
        size_dev = [[1.3,2.1],[0.2,0.7]]
        ori_dev = [45,-45]
        dim = ['motion','orientation','size']
        #################################################

        #get cue
        ##temporarily randomised
        #shuffle(dim)
        dim_cue = dim[seq]

        ###################################################3




        #set display array of the current trial
        shuffle(order)
        mot_loc = stim_loc[order[2]]

        shuffle(mot_dev)
        a=mot_loc[mot_dev[0]]

        shuffle(size_dev)

        shuffle(ori_dev)

        #set ans of the current trial
        if dim_cue =='size':
            ans = key[order[1]]
        elif dim_cue =='motion':
            ans = key[order[2]]
        else:
            ans = key[order[3]]

        #save the current array
        trialDisp = {'size':size_dev[0], 'motion':mot_dev[0], 'orientation': ori_dev[0],
            'neu_loc':key[order[0]],'size_loc':key[order[1]],'mot_loc':key[order[2]],'ori_loc':key[order[3]],
            'dimension':dim_cue
            }
      End Routine:
        thisExp.addData('size',trialDisp['size'])
        thisExp.addData('motion',trialDisp['motion'])
        thisExp.addData('orientation',trialDisp['orientation'])
        thisExp.addData('neu_loc',trialDisp['neu_loc'])
        thisExp.addData('size_loc',trialDisp['size_loc'])
        thisExp.addData('mot_loc',trialDisp['mot_loc'])
        thisExp.addData('ori_loc',trialDisp['ori_loc'])
        thisExp.addData('dimension',trialDisp['dimension'])
        thisExp.addData('CSI',dis_start)
      Each Frame:
        ##SHM
        mot_loc[mot_dev[0]]= 0.45*sin(trialClock.getTime()%3*3)+a
        #mot_loc[mot_dev[0]]= 0.45*sin(trialClock.getTime()%3/0.5)+a

        ##same speed
        ##not working
        #mot_loc[mot_dev[0]]= a+0.225*(-1)**int(trialClock.getTime()/0.05)
    TextComponent cue
      text [set every repeat] = $dim_cue
      stopVal [duration (s)] = $dis_duration
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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    PolygonComponent frame
      stopVal [duration (s)] = $dis_duration
      units = cm
      startVal [time (s)] = 0.0
      size = [8,8]
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    PolygonComponent neutural
      fillColor = blue
      stopVal [duration (s)] = $maxrt
      pos [set every repeat] = stim_loc[order[0]]
      lineWidth = 0
      units = cm
      startVal [time (s)] = $dis_start
      size = [0.45, 1.5]
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    PolygonComponent size
      fillColor [set every repeat] = blue
      stopVal [duration (s)] = $maxrt
      pos [set every repeat] = stim_loc[order[1]]
      lineWidth = 0
      units = cm
      startVal [time (s)] = $dis_start
      size [set every repeat] = size_dev[0]
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    PolygonComponent motion
      fillColor = blue
      stopVal [duration (s)] = $maxrt
      pos [set every frame] = mot_loc
      lineWidth = 0
      units = cm
      startVal [time (s)] = $dis_start
      size = [0.45, 1.5]
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    PolygonComponent orientation
      fillColor = blue
      stopVal [duration (s)] = $maxrt
      pos [set every repeat] = stim_loc[order[3]]
      lineWidth = 0
      units = cm
      ori [set every repeat] = ori_dev[0]
      startVal [time (s)] = $dis_start
      size = [0.45, 1.5]
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    KeyboardComponent resp
      correctAns = $ans
      storeCorrect = True
      stopVal [duration (s)] = $maxrt
      forceEndRoutine = True
      allowedKeys = 'num_1','num_2','num_5','num_4'
      startVal [time (s)] = $dis_start
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  Routine RCI
    PolygonComponent frame_RCI
      stopVal [duration (s)] = 0.1
      units = cm
      startVal [time (s)] = 0.0
      size = [8, 8]
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  Routine READY
    TextComponent fix
      text = +
      stopVal [duration (s)] = 1.4
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine accuracy
    CodeComponent CSI1
      Begin Routine:
        dis_start=CSI[0]
        dis_duration = maxrt+ dis_start
      End Routine:
        #set next Ntrial
        Ntrials = 20
        #savelist1
        thisExp.addData('list',list1)
    CodeComponent accrate
      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        practice.data['resp.corr']
        nCorr = practice.data['resp.corr'].sum() #.std(), .mean() also available
        msg = "You got %i out 0f 20 trials correct. Press SPACE to start the next block." %(nCorr)
    TextComponent blockacc
      text [set every repeat] = $msg
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent end_blockfb
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instruction
  Routine Instr_Practice
  Routine READY
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = conditions\practice.seq.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'seq': 0},
      {u'seq': 0},
      {u'seq': 1},
      {u'seq': 0},
      {u'seq': 0},
      {u'seq': 2},
      {u'seq': 2},
      {u'seq': 1},
      {u'seq': 0},
      {u'seq': 2},
      {u'seq': 1},
      {u'seq': 0},
      {u'seq': 2},
      {u'seq': 0},
      {u'seq': 2},
      {u'seq': 1},
      {u'seq': 1},
      {u'seq': 1},
      {u'seq': 2},
      {u'seq': 1}]
    Routine trial
    Routine feedback
    Routine RCI
  LoopTerminator practice
  Routine accuracy
  Routine Instr_exp
  Routine READY
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = $list1
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine feedback
    Routine RCI
  LoopTerminator block1
  Routine rest
  Routine READY
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = $list2
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine feedback
    Routine RCI
  LoopTerminator block2
  Routine end
